CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:((?P<mag>.*)-(?P<patient>.*)-(?P<database>.*)-(?P<type>.*)-(?P<class>.*)-(?P<slide>.*)-(?P<tile>.*).jpeg)$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<output>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:tile
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:slide

UnmixColors:[module_num:5|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
    Stain count:2
    Select the input color image:tile
    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.481574
    Green absorbance:0.784406
    Blue absorbance:0.390889
    Name the output image:Eosin
    Stain:Custom
    Red absorbance:0.325821
    Green absorbance:0.772144
    Blue absorbance:0.545558

UnmixColors:[module_num:6|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
    Stain count:2
    Select the input color image:tile
    Name the output image:Hematoxylin1
    Stain:Hematoxylin
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    Name the output image:Eosin1
    Stain:Eosin
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
UnmixColors:[module_num:7|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
    Stain count:2
    Select the input color image:tile
    Name the output image:Hematoxylin2
    Stain:Custom
    Red absorbance:0.598457
    Green absorbance:0.636121
    Blue absorbance:0.487031
    Name the output image:Eosin2
    Stain:Custom
    Red absorbance:0.317831
    Green absorbance:0.769531
    Blue absorbance:0.5539

UnmixColors:[module_num:8|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
    Stain count:2
    Select the input color image:tile
    Name the output image:Hematoxylin3
    Stain:Custom
    Red absorbance:0.453452
    Green absorbance:0.754547
    Blue absorbance:0.474383
    Name the output image:Eosin3
    Stain:Custom
    Red absorbance:0.332683
    Green absorbance:0.769021
    Blue absorbance:0.545829

UnmixColors:[module_num:9|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
    Stain count:2
    Select the input color image:tile
    Name the output image:Hematoxylin4
    Stain:Custom
    Red absorbance:0.492218
    Green absorbance:0.767466
    Blue absorbance:0.410753
    Name the output image:Eosin4
    Stain:Custom
    Red absorbance:0.304918
    Green absorbance:0.747111
    Blue absorbance:0.590636

ImageMath:[module_num:10|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Hematoxylin
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Hematoxylin1
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Hematoxylin2
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Hematoxylin3
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Hematoxylin4
    Multiply the fifth image by:1.0
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
RemoveHoles:[module_num:11|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
    Select the input image:ImageAfterMath
    Name the output image:RemoveHoles
    Size of holes to fill:10

MaskImage:[module_num:12|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
    Select the input image:ImageAfterMath
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Image
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    Select image for mask:RemoveHoles
    Invert the mask?:No

GaussianFilter:[module_num:13|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
    Select the input image:MaskBlue
    Name the output image:GaussianFilter
    Sigma:1

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:GaussianFilter
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488 
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:nuclei
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

IdentifySecondaryObjects:[module_num:16|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
    Select the input objects:nuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:Hematoxylin1
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    Regularization factor:0.3
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:IdentifySecondaryObjects
    Name the output image:cells
    Select the color format:Color
    Select the colormap:Default

MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:nuclei
    Select objects to measure:IdentifySecondaryObjects
    Calculate the Zernike features?:No

MeasureGranularity:[module_num:19|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
    Image count:1
    Object count:0
    Select an image to measure:ImageAfterMath
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

Threshold:[module_num:20|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
    Select the input image:Eosin4
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureImageAreaOccupied:[module_num:21|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:Threshold

MeasureImageIntensity:[module_num:22|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
    Select the image to measure:Eosin4
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageIntensity:[module_num:23|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
    Select the image to measure:ImageAfterMath
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureTexture:[module_num:24|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:ImageAfterMath
    Select objects to measure:nuclei
    Texture scale to measure:3
    Measure images or objects?:Both

MeasureObjectIntensity:[module_num:25|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
    Hidden:1
    Select an image to measure:ImageAfterMath
    Select objects to measure:nuclei

ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<output>/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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